<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.GenICam;assembly=Bonsai.GenICam"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <!-- Node 0: Timer — triggers a feature read every second -->
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <!-- Node 1: CreateReadMessage — builds a ReadRequest for ExposureTime -->
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateReadMessage">
          <p1:FeatureName>ExposureTime</p1:FeatureName>
        </Combinator>
      </Expression>
      <!-- Node 2: GenICamDevice — single owner; handles features + acquisition -->
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GenICamDevice">
          <p1:ProducerPath />
          <p1:DeviceIndex>0</p1:DeviceIndex>
          <p1:CameraModel>FLIR Blackfly S BFS-U3-16S2M</p1:CameraModel>
          <p1:NumBuffers>4</p1:NumBuffers>
          <p1:FrameTimeoutMs>5000</p1:FrameTimeoutMs>
          <p1:Features />
          <p1:AcquireFrames>true</p1:AcquireFrames>
        </Combinator>
      </Expression>
      <!-- Node 3: FilterMessage — keep only Frame messages -->
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FilterMessage">
          <p1:MessageType>Frame</p1:MessageType>
        </Combinator>
      </Expression>
      <!-- Node 4: ParseFrameMessage — extract GenICamFrame -->
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ParseFrameMessage" />
      </Expression>
      <!-- Node 5: select the IplImage from the frame -->
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <!-- Node 6: FilterMessage — keep ReadResponse for ExposureTime -->
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FilterMessage">
          <p1:FeatureName>ExposureTime</p1:FeatureName>
          <p1:MessageType>ReadResponse</p1:MessageType>
        </Combinator>
      </Expression>
      <!-- Node 7: ParseFloatMessage — extract double from ReadResponse -->
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ParseFloatMessage" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
